PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent selection
      image = FeelingsCircleBigText.gimp.png
      size = (1, 0.9)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 8.0
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    TextComponent text
      color = black
      letterHeight = 0.08
      pos = (-0.65, 0.6)
      startVal [time (s)] = 10
      stopVal [duration (s)] = 8.0
      text = Wie finden Sie das Video?
      units = norm
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = TicTacToe.mp4
      size = (1, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
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    SliderComponent motivation
      color = Black
      fillColor = Black
      forceEndRoutine = True
      granularity = 1
      initVal = 0
      labels = (0 ,1, 2, 3, 4, 5 ,6 ,7 ,8 ,9 ,10)
      letterHeight = 0.05
      pos = (0.65, -0.8)
      size = (0.5, 0.1)
      startVal [time (s)] = 10.0
      styles = scrollbar
      ticks = (0 ,1, 2, 3, 4, 5 ,6 ,7 ,8 ,9 ,10)
      units = norm
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    TextComponent Motivation
      color = black
      letterHeight = 0.08
      pos = (0.65, -0.7)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 8.0
      text = Motivation
      units = norm
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 10.0
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Flow
  Routine trial
